PsychoPy2experiment version="2024.1.5"
Settings
  expName = angel_paradigm_builder
  Audio lib = ptb
  runMode = False
  Show info dlg = False
  Experiment info = {"participant":"test","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1280,800]
  Units = height
  Data filename = u'%s_%s_%s' % (engine.CURRENT_ARGS.participant, expName, expInfo['date'])
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  Save csv file = True
  keyboardBackend = Pyglet
  Full-screen size = [1280,800]
  Saved data folder = str(engine.CURRENT_ARGS.output_dir or 'data')
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Routines
  Routine trial
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  Routine Init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import angel_paradigm_coder as engine
        args = engine.parse_args()
        args = engine.show_builder_config_dialog(args)
        engine.CURRENT_ARGS = args
      Begin Experiment:
        import random as std_random
        args = engine.CURRENT_ARGS
        engine.validate_config(args)
        levels = engine.selected_levels(args)
        thisExp.extraInfo['selected_levels'] = args.levels
        print(f'ANGEL running levels: {args.levels}; blocks per level: {args.blocks}', flush=True)
        # Synchronize KEYS and participant ID
        engine.KEYS['left'] = engine.parse_keys_list(args.left_keys)
        engine.KEYS['right'] = engine.parse_keys_list(args.right_keys)
        engine.KEYS['continue'] = engine.parse_keys_list(getattr(args, 'continue_keys', 'any'))
        engine.KEYS['trigger'] = engine.parse_keys_list(args.trigger_keys)
        KEYS = engine.KEYS
        expInfo['participant'] = args.participant
        thisExp.extraInfo['participant'] = args.participant
        exp_clock = core.Clock()
        markers = engine.MarkerSender(args, core, exp_clock)
        rng = std_random.Random(args.seed)
        assets_by_level = {lvl: engine.load_assets(args.resource_root / engine.LEVEL_TEMPLATES[lvl], args.language) for lvl in levels}
        assets = assets_by_level[levels[0]]
        trial_counter = 0
        main_session_rows = []
        # Adapter so engine can log directly to PsychoPy ExperimentHandler
        class _PsyWriter:
            def writerow(self, row):
                for k, v in row.items():
                    thisExp.addData(k, v)
                thisExp.nextEntry()
        class _PsyFile:
            def flush(self): pass
        psy_writer = _PsyWriter()
        psy_file = _PsyFile()
      End Experiment:
        engine.clear_sound_cache()
        import time as _time
        _time.sleep(0.3)
        markers.close()
  Routine Instructions
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    CodeComponent instruction_code
      Code Type = Py
      Begin Experiment:
        inst_audio = None
      Begin Routine:
        if getattr(args, 'skip_instructions', False):
            continueRoutine = False
        else:
            engine.activate_experiment_window(win)
            event.clearEvents(eventType='keyboard')
            try:
                instruction_mouse = event.Mouse(win=win)
            except Exception:
                instruction_mouse = None
            instruction_mouse_was_down = any(instruction_mouse.getPressed()) if instruction_mouse is not None else False
            markers.send('instruction_start', 101)
            inst_img = str(assets['language'] / 'InstructionLevel1.PNG')
            instruction_image.setImage(inst_img)
            if getattr(args, 'audio_instructions', False):
                inst_audio_path = assets['language'] / 'InstructionLevel1.mp3'
                if inst_audio_path.exists():
                    inst_audio = engine.get_cached_sound(sound, inst_audio_path)
                    if inst_audio:
                        try:
                            inst_audio.play()
                        except Exception:
                            pass
      Each Frame:
        if not getattr(args, 'skip_instructions', False) and instruction_key.status == STARTED:
            fallback_keys = event.getKeys()
            if any(key in engine.KEYS['quit'] for key in fallback_keys):
                raise KeyboardInterrupt
            mouse_down = any(instruction_mouse.getPressed()) if instruction_mouse is not None else False
            if fallback_keys or (mouse_down and not instruction_mouse_was_down):
                instruction_key.keys = fallback_keys[-1] if fallback_keys else 'mouse'
                instruction_key.rt = instruction_key.clock.getTime()
                instruction_key.duration = None
                continueRoutine = False
            instruction_mouse_was_down = mouse_down
      End Routine:
        markers.send('instruction_end', 102)
        if 'inst_audio' in locals() and inst_audio:
            try:
                inst_audio.stop()
            except Exception:
                pass
    ImageComponent instruction_image
      startVal [time (s)] = 0.0
      size = (1.333, 1.0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/InstructionLevel1.PNG
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    KeyboardComponent instruction_key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
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  Routine PracticeRoutine
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    CodeComponent practice_code
      Code Type = Py
      Begin Routine:
        # ==============================================================================
        # ANGEL PRACTICE CONTROLLER: RUNS STRICTLY BEFORE SCANNER TRIGGER WAIT
        # ==============================================================================
        if getattr(args, 'practice', 0) > 0:
            markers.send('practice_start', 103)
            trial_counter = engine.run_practice_phase(
                levels, args, win, core, event, visual, sound,
                psy_writer, psy_file, rng, trial_counter, exp_clock, markers,
                show_instructions=False
            )
            markers.send('practice_end', 104)
        continueRoutine = False
  Routine TriggerWait
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    CodeComponent trigger_code
      Code Type = Py
      Begin Routine:
        ANGEL_TRIGGER_KEYS = engine.KEYS['trigger']
        if not getattr(args, 'fmri_mode', False):
            continueRoutine = False
        else:
            engine.activate_experiment_window(win)
            event.clearEvents(eventType='keyboard')
            markers.send('trigger_wait_start', 105)
            dummy_n = getattr(args, 'dummy_scans', 5)
            tr_val = getattr(args, 'tr_s', 2.0)
            wait_s = dummy_n * tr_val
            tr_keys_str = ', '.join(ANGEL_TRIGGER_KEYS)
            msg = f'fMRI Scanner Session\n\nWaiting for scanner trigger ({tr_keys_str})...\n\nPress a trigger key in this window.\n(Equilibration: {dummy_n} TRs = {wait_s:.1f}s)'
            trigger_text.setText(msg)
      Each Frame:
        if getattr(args, 'fmri_mode', False) and trigger_key.status == STARTED:
            fallback_keys = event.getKeys(keyList=ANGEL_TRIGGER_KEYS, timeStamped=exp_clock)
            if fallback_keys:
                trigger_key.keys, args.trigger_onset_global = fallback_keys[-1]
                trigger_key.rt = trigger_key.clock.getTime()
                trigger_key.duration = None
                continueRoutine = False
      End Routine:
        if getattr(args, 'fmri_mode', False):
            trig_t = getattr(args, 'trigger_onset_global', None)
            if trig_t is None:
                trig_t = exp_clock.getTime()
            args.trigger_onset_global = trig_t
            markers.send('trigger_received', 106)
            dummy_n = getattr(args, 'dummy_scans', 5)
            tr_val = getattr(args, 'tr_s', 2.0)
            wait_s = dummy_n * tr_val
            if wait_s > 0:
                eq_start = exp_clock.getTime()
                while exp_clock.getTime() - eq_start < wait_s:
                    rem = wait_s - (exp_clock.getTime() - eq_start)
                    trigger_text.setText(f'Scanner Trigger Received!\n\nEquilibrating dummy scans...\n\n{rem:.1f}s remaining')
                    trigger_text.draw()
                    win.flip()
                    if event.getKeys(keyList=['escape']):
                        raise KeyboardInterrupt
    TextComponent trigger_text
      startVal [time (s)] = 0.0
      units = height
      text = Waiting for scanner trigger (s)...
      letterHeight = 0.05
      height = 0.05
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    KeyboardComponent trigger_key
      startVal [time (s)] = 0.0
      forceEndRoutine = True
      allowedKeys = ANGEL_TRIGGER_KEYS
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  Routine TrialRoutine
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    ImageComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (0.075, 0.075)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/plus.png
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    ImageComponent left_mask
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (0.32, 0.41)
      pos = (-0.42, 0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    ImageComponent right_mask
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (0.32, 0.41)
      pos = (0.42, 0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    ImageComponent target_stim
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
      size = (0.32, 0.41)
      pos = (-0.42, 0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/faa01.png
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    ImageComponent top_distractor
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
      size = (0.12, 0.085)
      pos = (-0.18, 0.34)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    ImageComponent bottom_distractor
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
      size = (0.12, 0.085)
      pos = (-0.18, -0.34)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    KeyboardComponent response_key
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.70
      forceEndRoutine = False
      allowedKeys = 'left', 'right', 'z', 'slash', '1', '2', '4', '9'
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    CodeComponent trial_runner
      Code Type = Py
      Begin Experiment:
        trials = []
      Begin Routine:
        # ==============================================================================
        # ANGEL MAIN SESSION CONTROLLER
        # ==============================================================================
        active_trials, baseline_trials = engine.parse_trials_per_block(args.trials_per_block)
        block_trial_count = active_trials + baseline_trials
        total_main_trials = args.blocks * block_trial_count
        for level in levels:
            assets = assets_by_level[level]
            print(f'ANGEL main task: starting level {level} of {args.levels}', flush=True)
            if level != levels[0] and not getattr(args, 'skip_instructions', False):
                markers.send('instruction_start', 101)
                engine.show_level_instruction(win, event, visual, sound, assets, level, 'main')
                markers.send('instruction_end', 102)
            stimuli = engine.make_stimuli(win, visual, assets)
            audio_cache = engine.make_audio_cache(sound, assets)
            block_rows = []
            for trial in engine.generate_level_trials(
                level, args.blocks, rng, args.category_set,
                args.paired_tone_offset_mode, args.paired_tone_offset_min,
                args.paired_tone_offset_max, args.cd_schedule,
                active_trials, baseline_trials, args.level2_cd
            ):
                if trial.trial_in_block == 1:
                    markers.send('block_start', 1)
                trial_counter += 1
                block_name = f'level{level}_block{trial.block:02d}'
                row = engine.run_trial(
                    trial, args, win, core, event, visual, sound, stimuli,
                    assets, audio_cache, rng, trial_counter, exp_clock, markers, block_name
                )
                row['phase'] = 'main'
                block_rows.append(row)
                main_session_rows.append(row)
                for k, v in row.items():
                    thisExp.addData(k, v)
                thisExp.nextEntry()
                # Mid-block feedback (only if show_feedback is True)
                if getattr(args, 'show_feedback', True) and trial.trial_in_block == block_trial_count and trial.block % getattr(args, 'feedback_frequency', 2) == 0:
                    markers.send('feedback_start', 107)
                    engine.show_feedback(
                        win, event, visual, sound, assets['language'],
                        block_rows[-2 * block_trial_count:],
                        len(block_rows), total_main_trials
                    )
                    markers.send('feedback_end', 108)
                # Level 2 Reversal Rule Slide (at halfway point)
                if level == '2' and trial.block == args.blocks // 2 and trial.trial_in_block == block_trial_count:
                    markers.send('reversal_rule_start', 109)
                    rev_text = 'Rule change\n\nMeaningful: RIGHT\nAmbiguous: LEFT'
                    if getattr(args, 'passive_mode', False):
                        rev_text += '\n\nContinuing automatically...'
                    else:
                        rev_text += f'\n\nPress {engine._continue_hint()} to continue'
                    reversal = visual.TextStim(win, text=rev_text, color='white', height=0.04, units='height')
                    reversal.draw()
                    win.flip()
                    engine.wait_for_continue(event, timeout=getattr(args, 'slide_timeout', 5.0))
                    markers.send('reversal_rule_end', 110)
            # Level Session Summary (only if show_feedback is True)
            if getattr(args, 'show_feedback', True):
                engine.show_session_summary(win, event, visual, sound, assets['language'], block_rows, label=f'Level {level} Session')
        # Export fMRI Events CSV and Marker Log if in fMRI mode
        if getattr(args, 'fmri_mode', False) and getattr(args, 'trigger_onset_global', None) is not None:
            from pathlib import Path
            csv_p = Path(thisExp.dataFileName + '.csv')
            events_p = csv_p.with_name(csv_p.stem + '_fmri_events.csv')
            engine.save_fmri_events(events_p, main_session_rows, args.trigger_onset_global)
            markers_p = csv_p.with_name(csv_p.stem + '_markers.csv')
            markers.save_log(markers_p)
        continueRoutine = False
  Routine Feedback
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        if not getattr(args, 'show_feedback', True):
            continueRoutine = False
        else:
            if getattr(args, 'passive_mode', False):
                feedback_text.setText('Session Complete!\n\nContinuing automatically...')
    ImageComponent feedback_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(getattr(args, 'slide_timeout', 5.0) if getattr(args, 'slide_timeout', 5.0) > 0 else 999999.0)
      size = (1.05, 0.78)
      pos = (0, 0.14)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/FeedbackGoodjob.PNG
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    TextComponent feedback_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(getattr(args, 'slide_timeout', 5.0) if getattr(args, 'slide_timeout', 5.0) > 0 else 999999.0)
      pos = (0, -0.34)
      units = height
      text = Session Complete! Press any key to continue...
      letterHeight = 0.05
      height = 0.035
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    KeyboardComponent feedback_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(getattr(args, 'slide_timeout', 5.0) if getattr(args, 'slide_timeout', 5.0) > 0 else 999999.0)
      forceEndRoutine = True
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  Routine End
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    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        markers.send('experiment_end', 99)
    ImageComponent end_image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(getattr(args, 'slide_timeout', 5.0) if getattr(args, 'slide_timeout', 5.0) > 0 else 999999.0)
      size = (1.333, 1.0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/ExperimentEnd.PNG
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    KeyboardComponent end_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(getattr(args, 'slide_timeout', 5.0) if getattr(args, 'slide_timeout', 5.0) > 0 else 999999.0)
      forceEndRoutine = True
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Flow
  Routine Init
  Routine Instructions
  Routine PracticeRoutine
  Routine TriggerWait
  Routine TrialRoutine
  Routine Feedback
  Routine End
